PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = pygame
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'group': "['A', 'B', 'C', 'D']"}
  Full-screen window = True
  Monitor = labMonitor
  Save hdf5 file = True
  Screen = 2
  Units = norm
  Use version = 2022.2.4
  Window size (pixels) = [2560, 1440]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 TOWER
  elPupilAlgorithm = CENTROID_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = attentional_competition_task
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent codeTrial
      Code Type = Py
      Before Experiment:
        feedback_color = (0,0,0)
        feedback_opacity = 0
        feedback_audio = "audio/silence.wav"
        cursorcolor="white"
        log_msg = ""

        rectsize = (0.2, 0.2)
        imagesize_test = [1, 1]

        score = 0
        points = 0

        looked_at = False
        paused = False
        outcome = ""
      Begin Routine:
        looked_at = False
        cursorcolor="white"

        logging.log(level=logging.INFO, msg=f'ImageOnset_{stim}')
        ioServer.sendMessageEvent(text='ImageOnset')
        eyetracker.sendMessage('ImageOnset')
      Each Frame:
        roi.size = image.size
        roi.pos = position

        if roi.isLookedIn:
            looked_at = True
            continueRoutine = False

        if event.getKeys(keyList=["p"]) and not paused:
            print("Experiment Paused - Press 'p' to continue.")
            paused = True
            event.waitKeys(keyList=["p"], clearEvents=True)

            print("Experiment Continued")
            paused = False
            event.clearEvents(eventType="keyboard")
      End Routine:
        if looked_at & ("neg" in stim):
            feedback_color = "red"
            feedback_opacity = 1
            cursorcolor="red"
            feedback_audio = "audio/error.wav"
            log_msg = "lookedat_cs_plus"
            points = -3
            score += points
            feedback_points = f"{points}"
            feedback_score = f"Score: {score}"
            outcome = "loss"
        elif looked_at & ("pos" in stim):
            feedback_color = "green"
            feedback_opacity = 1
            cursorcolor="green"
            feedback_audio = "audio/win.wav"
            log_msg = "lookedat_cs_minus"
            points = 3
            score += points
            feedback_points = f"+{points}"
            feedback_score = f"Score: {score}"
            outcome = "reward"
        else:
            feedback_color = (0,0,0)
            feedback_opacity = 0
            feedback_audio = "audio/silence.wav"
            log_msg = "no_look"
            points = 0
            feedback_points = ""
            feedback_score = ""
            outcome = "none"

        rectsize = [item * 1.02 for item in image.size]

        image_w = image.size[0]
        image_h = image.size[1]
        imagesize_test = [image_w * 1.2, image_h * 1.2]

        thisExp.addData('score', score)
        thisExp.addData('outcome', outcome)
    ImageComponent image
      image [set every repeat] = $eval(stim)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = position
      save = first look
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = image.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
    PolygonComponent gazeCursor
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      saveStartStop = False
      shape = circle
      size = (0.01, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine feedback
    CodeComponent codeFeedback
      Code Type = Py
      Before Experiment:
        soundFeedback = sound.Sound('A', secs=1, stereo=True, hamming=True, name='soundFeedback')
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'FeedbackOnset_{log_msg}')
        ioServer.sendMessageEvent(text='FeedbackOnset')
        eyetracker.sendMessage('FeedbackOnset')
        eyetracker.sendMessage(outcome)
    TextComponent textPoints
      color [set every repeat] = $feedback_color
      letterHeight = 0.1
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every frame] = $feedback_points
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    TextComponent textScore
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every frame] = $feedback_score
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    PolygonComponent polygon
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $feedback_color
      lineWidth = 100
      opacity [set every repeat] = feedback_opacity
      pos [set every repeat] = position
      saveStartStop = False
      shape = rectangle
      size [set every frame] = rectsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent imageFeedback
      image [set every repeat] = $eval(stim)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent gazeCursor_Feedback
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      saveStartStop = False
      shape = circle
      size = (0.01, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    SoundComponent soundFeedback
      saveStartStop = False
      sound [set every repeat] = $feedback_audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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  Routine cross
    CodeComponent codeFixate
      Code Type = Py
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'FixationCross')
        eyetracker.setRecordingState(True)

        if currentLoop.name == "learning_trials":
            eyetracker.sendMessage("Trial " + str(learning_trials.thisN+1) + ", Condition " + stim)
            print("VP %s TRIALID %d CONDITION %s"%(expInfo['participant'], learning_trials.thisN+1, stim))

        if currentLoop.name == "trials":
            eyetracker.sendMessage("Trial " + str(trials.thisN+learning_trials.thisN+1) + ", Condition " + stim)
            print("VP %s TRIALID %d CONDITION %s"%(expInfo['participant'], trials.thisN+learning_trials.thisN+1, stim))

        if currentLoop.name == "testtrials":
            eyetracker.sendMessage("Test-Trial " + str(testtrials.thisN+1))
            print("VP %s TESTTRIALID %d"%(expInfo['participant'], testtrials.thisN+1))

        if currentLoop.name == "testtrials_novelty":
            eyetracker.sendMessage("Test-Trial " + str(testtrials_novelty.thisN+testtrials.thisN+1))
            print("VP %s TESTTRIALID %d"%(expInfo['participant'], testtrials_novelty.thisN+testtrials.thisN+1))
    TextComponent fixcross
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine blank
    CodeComponent codeBlank
      Code Type = Py
      Before Experiment:
        jittered_duration_blank = 1.5
      Begin Routine:
        jittered_duration_blank = 1.0 + random()
      End Routine:
        # print(f"Start: {round(blankScreen.tStart, 3)}, End: {round(blankScreen.tStop, 3)}, Duration: {round(blankScreen.tStop - blankScreen.tStart, 3)}")
    TextComponent blankScreen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jittered_duration_blank
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  Routine welcome
    TextComponent textStart
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        vielen Dank für Ihre Teilnahme an unserem Experiment.
        Jetzt beginnt der zweite Teil.

        Bitte drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStart
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeWelcome
      Code Type = Py
      Begin Routine:
        print("Welcome Screen. Press Space to continue.")
  Routine end
    TextComponent textEnd
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        dieser Teil des Experiments ist beendet.

        Bitte melden Sie sich bei der Versuchsleitung.
    CodeComponent codeEnd
      Code Type = Py
      End Routine:
        print("----------- END -----------")
  Routine stimRating
    CodeComponent codeStimRating
      Code Type = Py
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'StimRating_{stim}')
        print("Rating of Stimulus: %s"%(stim))
        win.mouseVisible = True
    TextComponent textRateStim
      letterHeight = 0.06
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wie fühlen Sie sich bei der Betrachtung des Bildes?
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    ImageComponent imageRating
      image [set every repeat] = $eval(stim)
      pos [set every repeat] = (0, 0.2)
      startVal [time (s)] = 0
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    TextComponent textUnpleasant
      letterHeight = 0.05
      pos = (-0.5, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        sehr
        unwohl
    TextComponent textPleasant
      letterHeight = 0.05
      pos = (0.5, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        sehr
        wohl
    SliderComponent sliderStim
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent textSpaceStim
      letterHeight = 0.06
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Bitte drücken Sie die Leertaste, um die Antwort zu bestätigen.
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    KeyboardComponent spaceStim
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = sliderStim.rating
      store = nothing
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  Routine shock
    CodeComponent code
      Code Type = Py
      Each Frame:
        if skipShock:
            continueRoutine = False
    ParallelOutComponent portShock1T
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = 132
      startVal [time (s)] = 0.1
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
    ParallelOutComponent portShock2T
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = 132
      startVal [time (s)] = 0.15
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
    ParallelOutComponent portShock3T
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = 132
      startVal [time (s)] = 0.2
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
    TextComponent fixcrossT
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine testInstr
    TextComponent textTestInstr
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Im nächsten Block sehen Sie noch einmal die unterschiedlichen Bilder.

        Bitte drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceTestInstr
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeTestInstruction
      Code Type = Py
      Begin Routine:
        print("Start Test Phase. Press Space to continue.")
        win.mouseVisible = False
  Routine startETCalibration
    TextComponent text_ETCalibration
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Wir starten mit der Kalibrierung des Eye-Trackers.

        Bitte drücken Sie wieder die Leertaste, um diese zu beginnen.
    KeyboardComponent spaceETCalibration
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeStartETCalibration
      Code Type = Py
      Begin Routine:
        print("ET Calibration Screen. Press Space to continue.")
  Routine crossEnd
    CodeComponent code_end
      Code Type = Py
      Before Experiment:
        jittered_duration_cross = 3.5
      Begin Routine:
        eyetracker.setRecordingState(False)
        jittered_duration_cross = 3.0 + random()
    TextComponent fixcrossE
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jittered_duration_cross
      text = +
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  Routine startTask
    CodeComponent codeStartTask
      Code Type = Py
      Begin Routine:
        print("Start Task Screen. Press Space to continue.")
        win.mouseVisible = False
    TextComponent textStartTask
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Wir starten nun mit dem Experiment.

        Sie werden in jedem Durchgang in einer der vier Ecken des Bildschirms ein Bild präsentiert bekommen. Über Ihr Blickverhalten können Sie eine Belohnung in Form von Punkten erhalten. Allerdings lauert auch die Gefahr eines Verlustes von Punkten. Ihr Ziel ist es Ihren Belohnungsscore zu maximieren.

        Bitte fixieren Sie am Anfang jedes Durchgangs das Fixationskreuz.

        Drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStartTask
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine startExp
    TextComponent textStartExp
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Die Kalibrierung ist abgeschlossen.

        Während des Experiments werden Sie mehrere Bilder sehen.
        Bitte geben Sie nun an, wie Sie sich bei der Betrachtung der Bilder fühlen.

        Drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStartExp
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeStartExp
      Code Type = Py
      Begin Routine:
        print("Start Experiment Screen. Press Space to continue.")
  Routine repeatTask
    CodeComponent codeRepeatTask
      Code Type = Py
      Begin Routine:
        print("Second Instruction Screen. Press Space to continue.")
        win.mouseVisible = False
    TextComponent textRepeatTask
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        --- Kurze Pause ---

        Im nächsten Block ist Ihre Aufgabe weiterhin Ihren Belohnungsscore zu maximieren.
    TextboxComponent textboxRepeatInstruction
      bold = True
      editable = False
      letterHeight = 0.06
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Sie können den Verlust von Punkten vermeiden, in dem Sie das entsprechende Bild nicht anschauen.
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    TextComponent textRepeatSpace
      letterHeight = 0.06
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bitte fixieren Sie am Anfang jedes Durchgangs das Fixationskreuz.

        Drücken Sie die Leertaste, um weiterzumachen.
    KeyboardComponent spaceRepeatTask
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_trial
    CodeComponent codeTestTrial
      Code Type = Py
      Before Experiment:
        feedback_color = (0,0,0)
        feedback_opacity = 0
        feedback_audio = "audio/silence.wav"
        cursorcolor="white"
        log_msg = ""

        rectsize = (0.2, 0.2)
        imagesize_test = [1, 1]
        feedback_position = (0, 0)

        score = 0
        points = 0

        looked_at_roi1 = False
        looked_at_roi2 = False
        looked_at_roi3 = False
        looked_at_roi4 = False
        paused = False
        outcome = ""
      Begin Routine:
        looked_at_roi1 = False
        looked_at_roi2 = False
        looked_at_roi3 = False
        looked_at_roi4 = False
        cursorcolor="white"

        logging.log(level=logging.INFO, msg=f'ImageTestOnset')
        ioServer.sendMessageEvent(text='ImageTestOnset')
        eyetracker.sendMessage('ImageTestOnset')
      Each Frame:
        if loop_timer.getTime() >= 2.0:
            continueRoutine = False
            currentLoop.finished = True

        test_roi1.size = test_image1.size
        test_roi1.pos = position1

        if test_roi1.isLookedIn and not looked_at_roi1_trial:
            looked_at_roi1 = True
            looked_at_roi1_trial = True
            continueRoutine = False

        test_roi2.size = test_image2.size
        test_roi2.pos = position2

        if test_roi2.isLookedIn and not looked_at_roi2_trial:
            looked_at_roi2 = True
            looked_at_roi2_trial = True
            continueRoutine = False

        test_roi3.size = test_image3.size
        test_roi3.pos = position3

        if test_roi3.isLookedIn and not looked_at_roi3_trial:
            looked_at_roi3 = True
            looked_at_roi3_trial = True
            continueRoutine = False

        test_roi4.size = test_image4.size
        test_roi4.pos = position4

        if test_roi4.isLookedIn and not looked_at_roi4_trial:
            looked_at_roi4 = True
            looked_at_roi4_trial = True
            continueRoutine = False

        if event.getKeys(keyList=["p"]) and not paused:
            print("Experiment Paused - Press 'p' to continue.")
            paused = True
            event.waitKeys(keyList=["p"], clearEvents=True)

            print("Experiment Continued")
            paused = False
            event.clearEvents(eventType="keyboard")
      End Routine:
        if looked_at_roi1:
            feedback_position = position1
            if "neg" in stim1:
                outcome = "loss"
            elif "pos" in stim1:
                outcome = "reward"
            else:
                outcome = "none"
        if looked_at_roi2:
            feedback_position = position2
            if "neg" in stim2:
                outcome = "loss"
            elif "pos" in stim2:
                outcome = "reward"
            else:
                outcome = "none"
        if looked_at_roi3:
            feedback_position = position3
            if "neg" in stim3:
                outcome = "loss"
            elif "pos" in stim3:
                outcome = "reward"
            else:
                outcome = "none"
        if looked_at_roi4:
            feedback_position = position4
            if "neg" in stim4:
                outcome = "loss"
            elif "pos" in stim4:
                outcome = "reward"
            else:
                outcome = "none"

        if outcome == "loss":
            feedback_color = "red"
            feedback_opacity = 1
            cursorcolor="red"
            feedback_audio = "audio/error.wav"
            log_msg = "lookedat_cs_plus"
            points = -3
            score += points
            feedback_points = f"{points}"
            feedback_score = f"Score: {score}"
        elif outcome == "reward":
            feedback_color = "green"
            feedback_opacity = 1
            cursorcolor="green"
            feedback_audio = "audio/win.wav"
            log_msg = "lookedat_cs_minus"
            points = 3
            score += points
            feedback_points = f"+{points}"
            feedback_score = f"Score: {score}"
        else:
            feedback_color = (0,0,0)
            feedback_opacity = 0
            feedback_audio = "audio/silence.wav"
            log_msg = "no_look"
            points = 0
            feedback_points = ""
            feedback_score = ""

        rectsize = [item * 1.02 for item in test_image1.size]

        thisExp.addData('score', score)
        thisExp.addData('outcome', outcome)
    ImageComponent test_image1
      image [set every repeat] = $eval(stim1)
      pos [set every repeat] = position1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    RegionOfInterestComponent test_roi1
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = position1
      save = first look
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = test_image1.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
    ImageComponent test_image2
      image [set every repeat] = $eval(stim2)
      pos [set every repeat] = position2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    RegionOfInterestComponent test_roi2
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = position2
      save = first look
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = test_image2.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
    ImageComponent test_image3
      image [set every repeat] = $eval(stim3)
      pos [set every repeat] = position3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    RegionOfInterestComponent test_roi3
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = position3
      save = first look
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = test_image3.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
    ImageComponent test_image4
      image [set every repeat] = $eval(stim4)
      pos [set every repeat] = position4
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    RegionOfInterestComponent test_roi4
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = position4
      save = first look
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = test_image4.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
    PolygonComponent gazeCursorTest
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      saveStartStop = False
      shape = circle
      size = (0.01, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine test_feedback
    CodeComponent codeFeedbackTest
      Code Type = Py
      Before Experiment:
        soundFeedback = sound.Sound('A', secs=1, stereo=True, hamming=True, name='soundFeedback')
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'FeedbackTestOnset_{log_msg}')
        ioServer.sendMessageEvent(text='FeedbackTestOnset')
        eyetracker.sendMessage('FeedbackTestOnset')
        eyetracker.sendMessage(outcome)
      Each Frame:
        if loop_timer.getTime() >= 2.0:
            continueRoutine = False
            currentLoop.finished = True
    TextComponent textPointsTest
      color [set every repeat] = $feedback_color
      disabled = True
      letterHeight = 0.1
      opacity = 0
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every frame] = $feedback_points
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    TextComponent textScoreTest
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every frame] = $feedback_score
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    PolygonComponent polygonFeedbackTest
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $feedback_color
      lineWidth = 100
      opacity [set every repeat] = feedback_opacity
      pos [set every repeat] = feedback_position
      saveStartStop = False
      shape = rectangle
      size [set every frame] = rectsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent test_image_feedback1
      image [set every repeat] = $eval(stim1)
      pos [set every repeat] = position1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent test_image_feedback2
      image [set every repeat] = $eval(stim2)
      pos [set every repeat] = position2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent test_iamge_feedback3
      image [set every repeat] = $eval(stim3)
      pos [set every repeat] = position3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent test_iamge_feedback4
      image [set every repeat] = $eval(stim4)
      pos [set every repeat] = position4
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    PolygonComponent gazeCursorTestFeedback
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      saveStartStop = False
      shape = circle
      size = (0.01, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent soundFeedbackTest
      saveStartStop = False
      sound [set every repeat] = $feedback_audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
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  Routine blank_test
    CodeComponent codeBlankTest
      Code Type = Py
      Before Experiment:
        jittered_duration_blank = 1.5
      Begin Routine:
        jittered_duration_blank = 1.0 + random()
        looked_at_roi1_trial = False
        looked_at_roi2_trial = False
        looked_at_roi3_trial = False
        looked_at_roi4_trial = False
      End Routine:
        # print(f"Start: {round(blankScreen.tStart, 3)}, End: {round(blankScreen.tStop, 3)}, Duration: {round(blankScreen.tStop - blankScreen.tStart, 3)}")
        loop_timer = core.Clock()
    TextComponent blankScreenTest
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jittered_duration_blank
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  Routine search_task
    CodeComponent codeSearchTask
      Code Type = Py
      Begin Experiment:
        x_min = -.9
        x_max = .9
        y_min = -.8
        y_max = .7
        x_n = 9
        y_n = 4
        positions = []

        for idx_x in range(x_n):
            for idx_y in range(y_n):
                positions.append([idx_x / (x_n-1) * (abs(x_min) + x_max) + x_min, idx_y/ (y_n-1) * (abs(y_min) + y_max) + y_min])

        jitter = .06
        elements_per_group = 15
        elements = []

        width = win.size[0]
        height = win.size[1]
        width_circle = 0.07
        height_circle = 0.07 * (width/height)
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'VisualSearchTaskOnset')
        ioServer.sendMessageEvent(text='VisualSearchTaskOnset')
        eyetracker.sendMessage('VisualSearchTaskOnset')

        random_number = random()

        shuffle(positions)
        target_positions = positions[0:elements_per_group]
        distractor_positions = positions[elements_per_group:2 * elements_per_group]

        thisExp.addData('target_positions', target_positions)
        thisExp.addData('distractor_positions', distractor_positions)

        myTargets = []
        myTargetROIs = []
        for i in range(elements_per_group):
            position_x = target_positions[i][0]+np.random.uniform(-1, 1)*jitter
            position_y = target_positions[i][1]+np.random.uniform(-1, 1)*jitter
            roi = visual.ROI(win, name='roi', device=eyetracker, debug=False, shape='circle',
                pos=(position_x, position_y),
                size=(width_circle, height_circle), anchor='center', ori=0.0)
            circle = visual.ShapeStim(
                win=win, name='circle',
                size=(width_circle, height_circle), vertices='circle',ori=0.0, anchor='center',
                pos=(position_x, position_y),
                lineWidth=20.0, colorSpace='rgb',lineColor="white", fillColor="white",
                opacity=None, depth=-3, interpolate=True)
            myTargets.append(circle)
            myTargetROIs.append(roi)

        for target in myTargets:
            target.setAutoDraw(True)

        myDistractors = []
        myDistractorROIs = []
        myDistractorNoises = []
        for i in range(elements_per_group):
            position_x = distractor_positions[i][0]+np.random.uniform(-1, 1)*jitter
            position_y = distractor_positions[i][1]+np.random.uniform(-1, 1)*jitter
            roi = visual.ROI(win, name='roi', device=eyetracker, debug=False, shape='circle',
                pos=(position_x, position_y),
                size=(width_circle, height_circle), anchor='center', ori=0.0)
            circle = visual.ShapeStim(
                win=win, name='circle',
                size=(width_circle, height_circle), vertices='circle',ori=0.0, anchor='center',
                pos=(position_x, position_y),
                lineWidth=20.0, colorSpace='rgb', lineColor="white", fillColor="white",
                opacity=None, depth=-3, interpolate=True)
            noise = sound.Sound('audio/white.wav', secs=0.05, stereo=True, hamming=True, name='noise')
            noise.setVolume(1.0)
            myDistractors.append(circle)
            myDistractorROIs.append(roi)
            myDistractorNoises.append(noise)

        for distractor in myDistractors:
            distractor.setAutoDraw(True)
      Each Frame:
        for i, roiTarget in enumerate(myTargetROIs):
            if roiTarget.isLookedIn:
                myTargets[i].fillColor = "green"
                myTargets[i].lineColor = "green"
            else:
                myTargets[i].fillColor = "white"

        for i, roiDistractor in enumerate(myDistractorROIs):
            if roiDistractor.isLookedIn:
                myDistractors[i].fillColor = "red"
                myDistractors[i].lineColor = "red"
                myDistractorNoises[i].play()
            else:
                myDistractors[i].fillColor = "white"
                myDistractorNoises[i].stop()

        # Use "p" to pause experiment
        if event.getKeys(keyList=["p"]) and not paused:
            print("Experiment Paused - Press 'p' to continue.")
            paused = True
            event.waitKeys(keyList=["p"], clearEvents=True)

            print("Experiment Continued")
            paused = False
            event.clearEvents(eventType="keyboard")
      End Routine:
        for target in myTargets:
            target.setAutoDraw(False)

        for distractor in myDistractors:
            distractor.setAutoDraw(False)
    PolygonComponent gazeCursorSearch
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      saveStartStop = False
      shape = circle
      size = (0.01, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine startSearchTask
    TextComponent textStartSearch
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Zuerst möchten wir Ihnen das grundsätzliche Prinzip unserer Studie verdeutlichen: Die präsentierten Bilder reagieren auf Ihr Blickverhalten.

        Dafür werden Sie nun mehrere Kreise sehen, welche ebenso auf Ihre Blicke reagieren. Probieren Sie dies nun in Ruhe aus.

        Drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStartSearchTask
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeStartSearchTask
      Code Type = Py
      Begin Routine:
        print("Start Experiment Screen. Press Space to continue.")
        win.mouseVisible = False
  EyetrackerCalibrationRoutine ETCalibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.2
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  Routine welcome
  Routine startETCalibration
  EyetrackerCalibrationRoutine ETCalibration
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $"chooseBlock"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = random
    nReps = 1
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    Routine startExp
    LoopInitiator ratingtrials1 loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 1
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      Routine stimRating
    LoopTerminator ratingtrials1
    Routine startSearchTask
    LoopInitiator search_task_trials loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine cross
      Routine search_task
      Routine crossEnd
    LoopTerminator search_task_trials
    Routine startTask
    Routine blank
    LoopInitiator learning_trials loopType="TrialHandler"
      conditionsFile = $posFile
      loopType = random
      nReps = 2
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      Routine cross
      Routine blank
      Routine trial
      Routine feedback
      Routine crossEnd
    LoopTerminator learning_trials
    Routine repeatTask
    Routine blank
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $posFile
      loopType = random
      nReps = 2
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      Routine cross
      Routine blank
      Routine trial
      Routine feedback
      Routine crossEnd
    LoopTerminator trials
    LoopInitiator ratingtrials2 loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 1
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      Routine stimRating
    LoopTerminator ratingtrials2
    Routine testInstr
    LoopInitiator testtrials loopType="TrialHandler"
      conditionsFile = $posFileTest
      loopType = random
      nReps = 2
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      Routine cross
      Routine blank_test
      LoopInitiator loop_test loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 100
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        Routine test_trial
        Routine test_feedback
      LoopTerminator loop_test
      Routine crossEnd
    LoopTerminator testtrials
    LoopInitiator testtrials_novelty loopType="TrialHandler"
      Selected rows = $np.concatenate((np.random.permutation(np.arange(0, 24))[0:8], np.random.permutation(np.arange(24, 48))[0:10], np.random.permutation(np.arange(48, 72))[0:10], np.random.permutation(np.arange(72, 96))[0:10], np.random.permutation(np.arange(96, 120))[0:10]))
      conditionsFile = $posFileTestNew
      loopType = random
      nReps = 1
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      Routine cross
      Routine blank_test
      LoopInitiator loop_test_novelty loopType="TrialHandler"
        loopType = sequential
        nReps = 100
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        Routine test_trial
        Routine test_feedback
      LoopTerminator loop_test_novelty
      Routine crossEnd
    LoopTerminator testtrials_novelty
    LoopInitiator ratingtrials3 loopType="TrialHandler"
      conditionsFile = $stimFileNew
      loopType = random
      nReps = 1
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      Routine stimRating
    LoopTerminator ratingtrials3
  LoopTerminator blocks
  Routine end
