PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'group': "['A', 'B', 'C', 'D']"}
  Full-screen window = True
  Monitor = labMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = [2560, 1440]
  expName = gca_discrimination2
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent codeTrial
      Code Type = Py
      Before Experiment:
        feedback_color = (0,0,0)
        feedback_opacity = 0
        feedback_audio = "audio/silence.wav"
        cursorcolor="white"
        port_msg = 0
        log_msg = ""

        rectsize = (0.2, 0.2)
        imagesize_test = [1, 1]

        score = 0
        points = 0

        looked_at = False
        paused = False
      Begin Routine:
        looked_at = False
        cursorcolor="white"

        logging.log(level=logging.INFO, msg=f'ImageOnset_{trialtype}')
        ioServer.sendMessageEvent(text='ImageOnset')
        eyetracker.sendMessage('ImageOnset')
      Each Frame:
        roi.size = image.size
        roi.pos = position

        if roi.isLookedIn:
            looked_at = True
            continueRoutine = False

        if event.getKeys(keyList=["p"]) and not paused:
            print("Experiment Paused - Press 'p' to continue.")
            paused = True
            event.waitKeys(keyList=["p"], clearEvents=True)

            print("Experiment Continued")
            paused = False
            event.clearEvents(eventType="keyboard")
      End Routine:
        if looked_at & ("plus" in trialtype):
            feedback_color = "red"
            feedback_opacity = 1
            cursorcolor="red"
            feedback_audio = "audio/error.wav"
            port_msg = 128 + 4  # Shock1
            log_msg = "lookedat_cs_plus"
            points = 0  # 5
            # score -= points
            feedback_points = ""  # f"- {points}"
            feedback_score = ""  # f"Score: {score}"
        elif looked_at & ("minus" in trialtype):
            feedback_color = "green"
            feedback_opacity = 1
            cursorcolor="green"
            feedback_audio = "audio/win.wav"
            port_msg = 8  # Reward
            log_msg = "lookedat_cs_minus"
            points = 5
            score += points
            feedback_points = f"+ {points}"
            feedback_score = f"Score: {score}"
        else:
            feedback_color = (0,0,0)
            feedback_opacity = 0
            feedback_audio = "audio/silence.wav"
            port_msg = 16  # No Feedback
            log_msg = "no_look"
            points = 0
            feedback_points = ""
            feedback_score = ""

        rectsize = [item * 1.02 for item in image.size]

        image_w = image.size[0]
        image_h = image.size[1]
        imagesize_test = [image_w * 1.2, image_h * 1.2]
    ImageComponent image
      image [set every repeat] = $eval(trialtype)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = position
      save = every look
      shape = rectangle
      size [set every repeat] = image.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    PolygonComponent gazeCursor
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      shape = star
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ParallelOutComponent portImage
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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  Routine cross
    CodeComponent codeFixate
      Code Type = Py
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'FixationCross')

        if currentLoop.name == "learning_trials":
            print("VP %s PRACTICE-TRIAL %d"%(expInfo['participant'], learning_trials.thisN+1))

        if currentLoop.name == "trials":
            print("VP %s TRIAL %d"%(expInfo['participant'], trials.thisN+1))
    TextComponent fixcross
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine blank
    CodeComponent codeBlank
      Code Type = Py
      Before Experiment:
        jittered_duration_blank = 1.5
      Begin Routine:
        jittered_duration_blank = 1.0 + random()
      End Routine:
        # print(f"Start: {round(blankScreen.tStart, 3)}, End: {round(blankScreen.tStop, 3)}, Duration: {round(blankScreen.tStop - blankScreen.tStart, 3)}")
    TextComponent blankScreen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jittered_duration_blank
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  Routine welcome
    TextComponent textStart
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        jetzt beginnt der zweite Teil unseres Experiments.

        Bitte drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStart
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeWelcome
      Code Type = Py
      Begin Routine:
        print("Welcome Screen. Press Space to continue.")
  Routine end
    TextComponent textEnd
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        vielen Dank für Ihre Teilnahme an unserem Experiment.

        Der zweite Teil ist nun auch beendet.
        Sie können der Versuchsleitung Bescheid sagen.
    CodeComponent codeEnd
      Code Type = Py
      End Routine:
        print("----------- END -----------")
  Routine crossEnd
    CodeComponent code_end
      Code Type = Py
      Before Experiment:
        jittered_duration_cross = 1
      Begin Routine:
        jittered_duration_cross = random()
    TextComponent fixcrossEnd
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jittered_duration_cross
      text = +
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  Routine startExp
    CodeComponent codeStartExp
      Code Type = Py
      Begin Experiment:
        instruction_start = f"Bitte geben Sie an, ob die beiden Bilder, die Sie sehen gleich oder unterschiedlich sind.\nDrücken Sie die '{same.upper()}'-Taste, wenn die beiden Bilder gleich sind und die '{different.upper()}'-Taste, wenn die beiden Bilder unterschiedlich sind."
      Begin Routine:
        print("Start Experiment Screen. Press Space to continue.")
        win.mouseVisible = False
    TextComponent textStartExp
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $instruction_start
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    TextComponent textExpImages
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Diese Bilder werden präsentiert:
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    ImageComponent ImageLearning1
      image = stimuli/test1.png
      pos = (-0.1, -0.1)
      saveStartStop = False
      size = (0.221875, 0.416667)
      startVal [time (s)] = 0.0
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    ImageComponent ImageLearning2
      image = stimuli/test2.png
      pos = (0.1, -0.1)
      saveStartStop = False
      size = (0.221875, 0.416667)
      startVal [time (s)] = 0.0
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    TextComponent textSpace
      letterHeight = 0.06
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Fixieren Sie während des Experiments bitte stets das Fixationskreuz.

        Drücken Sie die Leertaste, um mit einer Übung zu starten.
    KeyboardComponent spaceStartExp
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine image1
    ImageComponent firstImage
      image [set every repeat] = $eval(stim1)
      pos [set every repeat] = position1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.15
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    TextComponent fixcrossImage1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      text = +
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  Routine interstimulus_cross
    TextComponent fixcrossITI
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine image2
    ImageComponent secondImage
      image [set every repeat] = $eval(stim2)
      pos [set every repeat] = position2
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.15
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    TextComponent fixcrossImage2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      text = +
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  Routine response
    KeyboardComponent key
      allowedKeys [set every repeat] = same, different
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
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    CodeComponent codeResponse
      Code Type = Py
      Before Experiment:
        random_number = random()

        if random_number > 0.5:
            same = 'ä'
            different = 'l'
        else:
            same = 'l'
            different = 'ä'

        feedback = ""
        answer = ""
        correctness = ""
      Begin Routine:
        answer = ""
        correctness = "no answer"
      Each Frame:
        if same[0] == key.keys:
            answer = "same"
        elif different[0] == key.keys:
            answer = "different"
      End Routine:
        if stim1 == stim2:
            condition = "same"
        else:
            condition = "different"

        if condition == answer:
            feedback = "Richtig!"
            logging.log(level=logging.INFO, msg=f'AnswerCorrect')
            correctness = "correct"
        else:
            if answer == "":
                feedback = "Zu langsam!"
                logging.log(level=logging.INFO, msg=f'NoAnswer')
                correctness = "no answer"
            else:
                feedback = "Falsch!"
                logging.log(level=logging.INFO, msg=f'AnswerWrong')
                correctness = "wrong"

        thisExp.addData('correctness', correctness)
  Routine startTask
    CodeComponent codeStartTask
      Code Type = Py
      Begin Experiment:
        instruction_task = f"Bitte geben Sie auch im nächsten Block an, ob die beiden Bilder, die Sie sehen gleich oder unterschiedlich sind.\nDrücken Sie die '{same.upper()}'-Taste, wenn die beiden Bilder gleich sind und die '{different.upper()}'-Taste, wenn die beiden Bilder unterschiedlich sind."
      Begin Routine:
        print("Start Task Screen. Press Space to continue.")
    TextComponent textStartTask
      letterHeight = 0.06
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text = $instruction_task
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    TextComponent textTaskImages
      letterHeight = 0.06
      pos = (0, 0.55)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Diese Bilder werden präsentiert:
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    ImageComponent ImageTask1
      image = stimuli/Social1.png
      pos = (-0.45, 0.25)
      saveStartStop = False
      size = (0.221875, 0.416667)
      startVal [time (s)] = 0.0
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    ImageComponent ImageTask2
      image = stimuli/Social2.png
      pos = (-0.15, 0.25)
      saveStartStop = False
      size = (0.221875, 0.416667)
      startVal [time (s)] = 0.0
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    ImageComponent ImageTask3
      image = stimuli/Social3.png
      pos = (0.15, 0.25)
      saveStartStop = False
      size = (0.221875, 0.416667)
      startVal [time (s)] = 0.0
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    ImageComponent ImageTask4
      image = stimuli/Social4.png
      pos = (0.45, 0.25)
      saveStartStop = False
      size = (0.221875, 0.416667)
      startVal [time (s)] = 0.0
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    ImageComponent ImageTask5
      image = stimuli/Nonsocial1.png
      pos = (-0.45, -0.20)
      saveStartStop = False
      size = (0.221875, 0.416667)
      startVal [time (s)] = 0.0
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    ImageComponent ImageTask6
      image = stimuli/Nonsocial2.png
      pos = (-0.15, -0.20)
      saveStartStop = False
      size = (0.221875, 0.416667)
      startVal [time (s)] = 0.0
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    ImageComponent ImageTask7
      image = stimuli/Nonsocial3.png
      pos = (0.15, -0.20)
      saveStartStop = False
      size = (0.221875, 0.416667)
      startVal [time (s)] = 0.0
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    ImageComponent ImageTask8
      image = stimuli/Nonsocial4.png
      pos = (0.45, -0.20)
      saveStartStop = False
      size = (0.221875, 0.416667)
      startVal [time (s)] = 0.0
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    TextComponent textTaskSpace
      letterHeight = 0.06
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Fixieren Sie während des Experiments bitte stets das Fixationskreuz.

        Drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStartTask
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    TextComponent feedbackText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback
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Flow
  Routine welcome
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $"chooseBlock"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = random
    nReps = 1
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    Routine startExp
    Routine blank
    LoopInitiator learning_trials loopType="TrialHandler"
      Selected rows = $randchoice(48, 10)
      conditionsFile = $testFile
      loopType = random
      nReps = 1
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      Routine cross
      Routine image1
      Routine interstimulus_cross
      Routine image2
      Routine response
      Routine feedback
      Routine crossEnd
    LoopTerminator learning_trials
    Routine startTask
    Routine blank
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $np.concatenate((np.random.permutation(np.arange(0, 144))[0:24], np.random.permutation(np.arange(144, 288))[0:24], np.random.permutation(np.arange(288, 336))[0:24], np.random.permutation(np.arange(336, 384))[0:24]))
      conditionsFile = $posFile
      loopType = random
      nReps = 1
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      Routine cross
      Routine image1
      Routine interstimulus_cross
      Routine image2
      Routine response
      Routine crossEnd
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
