PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'group': "['A', 'B', 'C', 'D']"}
  Full-screen window = True
  Monitor = labMonitor
  Save hdf5 file = True
  Screen = 2
  Units = norm
  Use version = 2022.2.4
  Window size (pixels) = [2560, 1440]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 TOWER
  elPupilAlgorithm = CENTROID_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = gca_avoidance_task
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent codeTrial
      Code Type = Py
      Before Experiment:
        feedback_color = (0,0,0)
        feedback_opacity = 0
        feedback_audio = "audio/silence.wav"
        cursorcolor="white"
        port_msg = 0
        log_msg = ""

        rectsize = (0.2, 0.2)
        imagesize_test = [1, 1]

        score = 0
        points = 0

        looked_at = False
        paused = False
        outcome = ""
      Begin Routine:
        looked_at = False
        cursorcolor="white"

        logging.log(level=logging.INFO, msg=f'ImageOnset_{trialtype}')
        ioServer.sendMessageEvent(text='ImageOnset')
        eyetracker.sendMessage('ImageOnset')
      Each Frame:
        roi.size = image.size
        roi.pos = position

        if roi.isLookedIn:
            looked_at = True
            continueRoutine = False

        if event.getKeys(keyList=["p"]) and not paused:
            print("Experiment Paused - Press 'p' to continue.")
            paused = True
            event.waitKeys(keyList=["p"], clearEvents=True)

            print("Experiment Continued")
            paused = False
            event.clearEvents(eventType="keyboard")
      End Routine:
        if looked_at & ("plus" in trialtype):
            feedback_color = "red"
            feedback_opacity = 1
            cursorcolor="red"
            feedback_audio = "audio/error.wav"
            port_msg = 128 + 4  # Shock1
            log_msg = "lookedat_cs_plus"
            points = 0  # 5
            # score -= points
            feedback_points = ""  # f"- {points}"
            feedback_score = ""  # f"Score: {score}"
            outcome = "shock"
        elif looked_at & ("minus" in trialtype):
            feedback_color = "green"
            feedback_opacity = 1
            cursorcolor="green"
            feedback_audio = "audio/win.wav"
            port_msg = 8  # Reward
            log_msg = "lookedat_cs_minus"
            points = 5
            score += points
            feedback_points = f"+ {points}"
            feedback_score = f"Score: {score}"
            outcome = "reward"
        else:
            feedback_color = (0,0,0)
            feedback_opacity = 0
            feedback_audio = "audio/silence.wav"
            port_msg = 16  # No Feedback
            log_msg = "no_look"
            points = 0
            feedback_points = ""
            feedback_score = ""
            outcome = "none"

        rectsize = [item * 1.02 for item in image.size]

        image_w = image.size[0]
        image_h = image.size[1]
        imagesize_test = [image_w * 1.2, image_h * 1.2]

        thisExp.addData('score', score)
        thisExp.addData('outcome', outcome)
    ImageComponent image
      image [set every repeat] = $eval(trialtype)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = position
      save = first look
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = image.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
    PolygonComponent gazeCursor
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      saveStartStop = False
      shape = star
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ParallelOutComponent portImage
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
  Routine feedback
    CodeComponent codeFeedback
      Code Type = Py
      Before Experiment:
        soundFeedback = sound.Sound('A', secs=1, stereo=True, hamming=True, name='soundFeedback')
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'FeedbackOnset_{log_msg}')
        ioServer.sendMessageEvent(text='FeedbackOnset')
        eyetracker.sendMessage('FeedbackOnset')
        eyetracker.sendMessage(outcome)
    TextComponent textPoints
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every frame] = $feedback_points
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    TextComponent textScore
      letterHeight = 0.06
      pos = (0, 0.24)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every frame] = $feedback_score
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    PolygonComponent polygon
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $feedback_color
      lineWidth = 100
      opacity [set every repeat] = feedback_opacity
      pos [set every repeat] = position
      saveStartStop = False
      shape = rectangle
      size [set every frame] = rectsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imageFeedback
      image [set every repeat] = $eval(trialtype)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent gazeCursor_Feedback
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      saveStartStop = False
      shape = star
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    SoundComponent soundFeedback
      saveStartStop = False
      sound [set every repeat] = $feedback_audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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    ParallelOutComponent portShock1
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = port_msg
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
    ParallelOutComponent portShock2
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = 128 if port_msg == 132 else 0
      startVal [time (s)] = 0.05
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
    ParallelOutComponent portShock3
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = 128 if port_msg == 132 else 0
      startVal [time (s)] = 0.1
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
  Routine cross
    CodeComponent codeFixate
      Code Type = Py
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'FixationCross')
        eyetracker.setRecordingState(True)

        if currentLoop.name == "learning_trials":
            eyetracker.sendMessage("Trial " + str(learning_trials.thisN+1) + ", Condition " + trialtype)
            print("VP %s TRIALID %d CONDITION %s"%(expInfo['participant'], learning_trials.thisN+1, trialtype))

        if currentLoop.name == "trials":
            eyetracker.sendMessage("Trial " + str(trials.thisN+33) + ", Condition " + trialtype)
            print("VP %s TRIALID %d CONDITION %s"%(expInfo['participant'], trials.thisN+33, trialtype))

        if currentLoop.name == "testtrials":
            eyetracker.sendMessage("Test-Trial " + str(testtrials.thisN+1) + ", Condition " + stimtype)
            print("VP %s TESTTRIALID %d CONDITION %s"%(expInfo['participant'], testtrials.thisN+1, stimtype))
    TextComponent fixcross
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine blank
    CodeComponent codeBlank
      Code Type = Py
      Before Experiment:
        jittered_duration_blank = 1.5
      Begin Routine:
        jittered_duration_blank = 1.0 + random()
      End Routine:
        # print(f"Start: {round(blankScreen.tStart, 3)}, End: {round(blankScreen.tStop, 3)}, Duration: {round(blankScreen.tStop - blankScreen.tStart, 3)}")
    TextComponent blankScreen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jittered_duration_blank
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  Routine welcome
    TextComponent textStart
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        vielen Dank für Ihre Teilnahme an unserem Experiment.

        Bitte drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStart
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeWelcome
      Code Type = Py
      Begin Routine:
        print("Welcome Screen. Press Space to continue.")
  Routine end
    TextComponent textEnd
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        der erste Teil des Experiments ist beendet.

        Es geht gleich weiter.
    CodeComponent codeEnd
      Code Type = Py
      End Routine:
        print("----------- END -----------")
  Routine painRating
    TextComponent textRate
      letterHeight = 0.06
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wie schmerzhaft fanden Sie den elektrischen Reiz?
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    TextComponent text_noPain
      letterHeight = 0.05
      pos = (-0.5, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        nichts
        gespürt
    TextComponent text_slightPain
      letterHeight = 0.05
      pos = (-0.1, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        eben
        wahrnehmbarer
        Schmerz
    TextComponent text_highPain
      letterHeight = 0.05
      pos = (0.5, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        unerträglicher
        Schmerz
    SliderComponent sliderPain
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.03
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent textSpacePain
      letterHeight = 0.06
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Bitte drücken Sie die Leertaste, um die Antwort zu bestätigen.
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    KeyboardComponent spacePain
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = sliderPain.rating
      store = nothing
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    CodeComponent codePainRating
      Code Type = Py
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'PainRating')
        print("Pain Rating. Press Space to continue.")

        values = [None]

        win.mouseVisible = True
      Each Frame:
        if sliderPainT.getRating() != values[-1]:
            values.append(sliderPainT.getRating())
            print(f"Value: {values[-1]}")
  Routine stimRating
    CodeComponent codeStimRating
      Code Type = Py
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'StimRating_{stimtype}')
        print("Rating of Stimulus: %s"%(stimtype))
        win.mouseVisible = True
    TextComponent textRateStim
      letterHeight = 0.06
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wie fühlen Sie sich bei der Betrachtung des Bildes?
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    ImageComponent imageRating
      image [set every repeat] = $eval(stimtype)
      pos [set every repeat] = (0, 0.2)
      startVal [time (s)] = 0
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    TextComponent textUnpleasant
      letterHeight = 0.05
      pos = (-0.5, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        sehr
        unwohl
    TextComponent textPleasant
      letterHeight = 0.05
      pos = (0.5, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        sehr
        wohl
    SliderComponent sliderStim
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent textSpaceStim
      letterHeight = 0.06
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Bitte drücken Sie die Leertaste, um die Antwort zu bestätigen.
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    KeyboardComponent spaceStim
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = sliderStim.rating
      store = nothing
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  Routine testtrial
    CodeComponent codeTesttrial
      Code Type = Py
      Begin Routine:
        from psychopy import logging
        logging.log(level=logging.INFO, msg=f'TestImageOnset_{stimtype}')
        ioServer.sendMessageEvent(text='TestImageOnset')
        eyetracker.sendMessage('TestImageOnset')
      Each Frame:
        roiTest.size = imageTest.size

        if event.getKeys(keyList=["p"]) and not paused:
            print("Experiment Paused - Press 'p' to continue.")
            paused = True
            event.waitKeys(keyList=["p"], clearEvents=True)

            print("Experiment Continued")
            paused = False
            event.clearEvents(eventType="keyboard")
    ImageComponent imageTest
      image [set every repeat] = $eval(stimtype)
      pos [set every repeat] = (0, 0)
      size [set every frame] = imagesize_test
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    RegionOfInterestComponent roiTest
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = first look
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = imageTest.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
    ParallelOutComponent portTestImage
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
  Routine painThreshold
    CodeComponent codePainRatingT
      Code Type = Py
      Begin Experiment:
        skipShock = False
      Begin Routine:
        if trials_threshold.thisN == 0:
            print("Press 's' to administer shock.")
        else:
            print(f"Press 's' to administer shock. Press 'g' to continue when pain threshold was found.")
        logging.log(level=logging.INFO, msg=f'PainThreshold')
        last_rating = None
      Each Frame:
        rating = sliderPainT.getRating()
        if rating != last_rating:
            print(f"Value: {rating}")
            last_rating = rating

        if 'g' in keys_PainT.keys:
            continueRoutine = False
            trials_threshold.finished = True
            skipShock = True
    SliderComponent sliderPainT
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.03
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent textRateT
      letterHeight = 0.06
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Wie schmerzhaft fanden Sie den elektrischen Reiz?
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    TextComponent text_noPainT
      letterHeight = 0.05
      pos = (-0.5, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.
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      text:
        nichts
        gespürt
    TextComponent text_slightPainT
      letterHeight = 0.05
      pos = (-0.1, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        eben
        wahrnehmbarer
        Schmerz
    TextComponent text_highPainT
      letterHeight = 0.05
      pos = (0.5, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.
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      text:
        unerträglicher
        Schmerz
    KeyboardComponent keys_PainT
      allowedKeys = 's', 'g'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine shock
    CodeComponent code
      Code Type = Py
      Each Frame:
        if skipShock:
            continueRoutine = False
    ParallelOutComponent portShock1T
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = 132
      startVal [time (s)] = 0.1
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
    ParallelOutComponent portShock2T
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = 132
      startVal [time (s)] = 0.15
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
    ParallelOutComponent portShock3T
      address = 0x0378
      register = EIO
      saveStartStop = False
      startData = 132
      startVal [time (s)] = 0.2
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
    TextComponent fixcrossT
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine testInstr
    TextComponent textTestInstr
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Im nächsten Block sehen Sie noch einmal die unterschiedlichen Bilder.

        Bitte drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceTestInstr
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeTestInstruction
      Code Type = Py
      Begin Routine:
        print("Start Test Phase. Press Space to continue.")
        win.mouseVisible = False
  Routine startPainThreshold
    TextComponent textPainThreshold
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Wir möchten zuerst den elektrischen Reiz kalibrieren.

        Bitte drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spacePainThreshold
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeStartPainThreshold
      Code Type = Py
      Begin Routine:
        print("Pain Calibration Screen. Press Space to continue.")
  Routine startETCalibration
    TextComponent text_ETCalibration
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Wir machen nun mit der Kalibrierung des Eye-Trackers weiter.

        Bitte drücken Sie wieder die Leertaste, um diese zu starten.
    KeyboardComponent spaceETCalibration
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeStartETCalibration
      Code Type = Py
      Begin Routine:
        print("ET Calibration Screen. Press Space to continue.")
  Routine crossEnd
    CodeComponent code_end
      Code Type = Py
      Before Experiment:
        jittered_duration_cross = 3.5
      Begin Routine:
        eyetracker.setRecordingState(False)
        jittered_duration_cross = 3.0 + random()
    TextComponent fixcrossE
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jittered_duration_cross
      text = +
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  EyetrackerValidationRoutine ETValidation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = white
    disabled = True
    expandDur = 1
    expandScale = 1.2
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = True
    showResults = False
    targetDelay = 1.0
    targetDur = 1
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine startTask
    CodeComponent codeStartTask
      Code Type = Py
      Begin Routine:
        print("Start Task Screen. Press Space to continue.")
        win.mouseVisible = False
    TextComponent textStartTask
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Wir starten nun mit dem Experiment.

        Sie werden in jedem Durchgang in einer der vier Ecken des Bildschirms ein Bild präsentiert bekommen. Über Ihr Blickverhalten können Sie eine Belohnung in Form von Punkten erhalten. Allerdings lauert auch die Gefahr eines elektrischen Reizes. Ihr Ziel ist es Ihren Belohnungsscore zu maximieren und die elektrischen Reize zu vermeiden.

        Bitte fixieren Sie am Anfang jedes Durchgangs das Fixationskreuz.

        Drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStartTask
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine startExp
    TextComponent textStartExp
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Die Kalibrierung ist abgeschlossen.

        Sie werden während des Experiments mehrere Bilder sehen.
        Bitte geben Sie nun an, wie Sie sich bei der Betrachtung der Bilder fühlen.

        Drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStartExp
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeStartExp
      Code Type = Py
      Begin Routine:
        print("Start Experiment Screen. Press Space to continue.")
  Routine repeatTask
    CodeComponent codeRepeatTask
      Code Type = Py
      Begin Routine:
        print("Second Instruction Screen. Press Space to continue.")
        win.mouseVisible = False
    TextComponent textRepeatTask
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        --- Kurze Pause ---

        Im nächsten Block ist Ihre Aufgabe weiterhin Ihren Belohnungsscore zu maximieren und die elektrischen Reize zu vermeiden.
    TextboxComponent textboxRepeatInstruction
      bold = True
      editable = False
      letterHeight = 0.06
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Den elektrischen Reiz können Sie vermeiden, in dem Sie das entsprechende Bild nicht anschauen.
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    TextComponent textRepeatSpace
      letterHeight = 0.06
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bitte fixieren Sie am Anfang jedes Durchgangs das Fixationskreuz.

        Drücken Sie die Leertaste, um weiterzumachen.
    KeyboardComponent spaceRepeatTask
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  EyetrackerCalibrationRoutine ETCalibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.2
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  Routine welcome
  Routine startPainThreshold
  LoopInitiator trials_threshold loopType="TrialHandler"
    loopType = random
    nReps = 99999
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    Routine painThreshold
    Routine shock
  LoopTerminator trials_threshold
  Routine startETCalibration
  EyetrackerCalibrationRoutine ETCalibration
  EyetrackerValidationRoutine ETValidation
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $"chooseBlock"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = random
    nReps = 1
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    Routine startExp
    LoopInitiator ratingtrials1 loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 1
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      Routine stimRating
    LoopTerminator ratingtrials1
    Routine startTask
    Routine blank
    LoopInitiator learning_trials loopType="TrialHandler"
      conditionsFile = $posFile
      loopType = random
      nReps = 2
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      Routine cross
      Routine blank
      Routine trial
      Routine feedback
      Routine crossEnd
    LoopTerminator learning_trials
    Routine repeatTask
    Routine blank
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $posFile
      loopType = random
      nReps = 5
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      Routine cross
      Routine blank
      Routine trial
      Routine feedback
      Routine crossEnd
    LoopTerminator trials
    Routine painRating
    LoopInitiator ratingtrials2 loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 1
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      Routine stimRating
    LoopTerminator ratingtrials2
    Routine testInstr
    LoopInitiator testtrials loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 10
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      Routine cross
      Routine testtrial
      Routine crossEnd
    LoopTerminator testtrials
    LoopInitiator ratingtrials3 loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 1
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      Routine stimRating
    LoopTerminator ratingtrials3
  LoopTerminator blocks
  Routine end
