PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'group': "['A', 'B', 'C', 'D']"}
  Full-screen window = True
  Monitor = labMonitor
  Save hdf5 file = True
  Screen = 2
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1920, 1080]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 TOWER
  elPupilAlgorithm = CENTROID_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = gca
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent codeTrial
      Code Type = Py
      Before Experiment:
        feedback_color = (0,0,0)
        feedback_opacity = 0
        feedback_audio = "audio/silence.wav"
        cursorcolor="white"
        port_msg = 0
        log_msg = ""

        rectsize = (0.2, 0.2)
        imagesize_test = [0.2, 0.2]
        imagesize_rating = [0.2, 0.2]

        score = 0
        points = 0

        looked_at = False
      Begin Routine:
        looked_at = False
        cursorcolor="white"

        logging.log(level=logging.INFO, msg=f'ImageOnset_{trialtype}')
      Each Frame:
        if roi.isLookedIn:
            looked_at = True
            continueRoutine = False
      End Routine:
        if looked_at & ("plus" in trialtype):
            feedback_color = "red"
            feedback_opacity = 1
            cursorcolor="red"
            feedback_audio = "audio/error.wav"
            port_msg = 128 + 4  # Shock1
            log_msg = "lookedat_cs_plus"
            points = 0  # 5
            # score -= points
            feedback_points = ""  # f"- {points}"
            feedback_score = ""  # f"Score: {score}"
        elif looked_at & ("minus" in trialtype):
            feedback_color = "green"
            feedback_opacity = 1
            cursorcolor="green"
            feedback_audio = "audio/win.wav"
            port_msg = 8  # Reward
            log_msg = "lookedat_cs_minus"
            points = 5
            score += points
            feedback_points = f"+ {points}"
            feedback_score = f"Score: {score}"
        else:
            feedback_color = (0,0,0)
            feedback_opacity = 0
            feedback_audio = "audio/silence.wav"
            port_msg = 16  # No Feedback
            log_msg = "no_look"
            points = 0
            feedback_points = ""
            feedback_score = ""

        rectsize = [item * 1.05 for item in image.size]

        image_w = image.size[0]
        image_h = image.size[1]
        image_h_spec_rating = 0.3
        imagesize_rating = [image_w * image_h_spec_rating / image_h, image_h_spec_rating]

        image_h_spec_test = 0.5
        imagesize_test = [image_w * image_h_spec_test / image_h, image_h_spec_test]
    ImageComponent image
      image [set every repeat] = $eval(trialtype)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every frame] = position
      save = every look
      saveStartStop = False
      shape = rectangle
      size = image.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
    PolygonComponent gazeCursor
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      shape = star
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ParallelOutComponent portImage
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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  Routine feedback
    CodeComponent codeFeedback
      Code Type = Py
      Before Experiment:
        soundFeedback = sound.Sound('A', secs=1, stereo=True, hamming=True, name='soundFeedback')
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'FeedbackOnset_{log_msg}')
    TextComponent textPoints
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every frame] = $feedback_points
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    TextComponent textScore
      letterHeight = 0.06
      pos = (0, 0.24)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every frame] = $feedback_score
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    PolygonComponent polygon
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $feedback_color
      lineWidth = 100
      opacity [set every repeat] = feedback_opacity
      pos [set every repeat] = position
      saveStartStop = False
      shape = rectangle
      size [set every frame] = rectsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imageFeedback
      image [set every repeat] = $eval(trialtype)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent gazeCursor_Feedback
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      shape = star
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    SoundComponent soundFeedback
      sound [set every repeat] = $feedback_audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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    ParallelOutComponent portShock1
      address = 0x0378
      register = EIO
      startData = port_msg
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent portShock2
      address = 0x0378
      register = EIO
      startData = 128 if port_msg == 132 else 0
      startVal [time (s)] = 0.05
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent portShock3
      address = 0x0378
      register = EIO
      startData = 128 if port_msg == 132 else 0
      startVal [time (s)] = 0.1
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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  Routine cross
    CodeComponent codeFixate
      Code Type = Py
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'FixationCross')
        eyetracker.setRecordingState(True)

        if currentLoop.name == "trials":
            eyetracker.sendMessage("VP %s TRIALID %d CONDITION %s"%(expInfo['participant'], trials.thisN+1, trialtype))
            print("VP %s TRIALID %d CONDITION %s"%(expInfo['participant'], trials.thisN+1, trialtype))

        if currentLoop.name == "testtrials":
            eyetracker.sendMessage("VP %s TESTTRIALID %d CONDITION %s"%(expInfo['participant'], testtrials.thisN+1, stimtype))
            print("VP %s TESTTRIALID %d CONDITION %s"%(expInfo['participant'], testtrials.thisN+1, stimtype))
    TextComponent fixcross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine blank
    TextComponent blankScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0 + random()
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  Routine welcome
    TextComponent textStart
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        vielen Dank für Ihre Teilnahme an unserem Experiment.

        Bitte drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStart
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeWelcome
      Code Type = Py
      Begin Routine:
        print("Welcome Screen. Press Space to continue.")
  Routine end
    TextComponent textEnd
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        vielen Dank für Ihre Teilnahme an unserem Experiment.

        Das Experiment ist beendet.
        Sie können der Versuchsleitung Bescheid sagen.
  Routine painRating
    TextComponent textRate
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Wie unangenehm fanden Sie den letzten elektrischen Reiz?
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    TextComponent text_noPain
      letterHeight = 0.03
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
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      text:
        nichts
        gespürt
    TextComponent text_slightPain
      letterHeight = 0.03
      pos = (-0.1, 0.1)
      startVal [time (s)] = 0.0
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      text:
        eben
        wahrnehmbarer
        Schmerz
    TextComponent text_highPain
      letterHeight = 0.03
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
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      text:
        unerträglicher
        Schmerz
    SliderComponent sliderPain
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.02
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent textSpacePain
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Bitte drücken Sie die Leertaste, um die Antwort zu bestätigen.
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    KeyboardComponent spacePain
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [condition] = sliderPain.rating
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    CodeComponent codePainRating
      Code Type = Py
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'PainRating')
        print("Pain Rating. Press Space to continue.")
  Routine stimRating
    TextComponent textRateStim
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wie wohl fühlen Sie sich bei der Betrachtung des Bildes?
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    ImageComponent imageRating
      image [set every repeat] = $eval(stimtype)
      pos [set every repeat] = (0, 0.1)
      size [set every frame] = imagesize_rating
      startVal [time (s)] = 0
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    TextComponent textUnpleasant
      letterHeight = 0.03
      pos = (-0.5, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        sehr
        unwohl
    TextComponent textPleasant
      letterHeight = 0.03
      pos = (0.5, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        sehr
        wohl
    SliderComponent sliderStim
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent textSpaceStim
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Bitte drücken Sie die Leertaste, um die Antwort zu bestätigen.
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    KeyboardComponent spaceStim
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [condition] = sliderStim.rating
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    CodeComponent codeStimRating
      Code Type = Py
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'StimRating_{stimtype}')
  Routine testtrial
    ImageComponent imageTest
      image [set every repeat] = $eval(stimtype)
      pos [set every repeat] = (0, 0)
      size [set every frame] = imagesize_test
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    ParallelOutComponent portTestImage
      address = 0x0378
      register = EIO
      startData = 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent codeTesttrial
      Code Type = Py
      Begin Routine:
        from psychopy import logging
        logging.log(level=logging.INFO, msg=f'TestImageOnset_{stimtype}')
  Routine painThreshold
    TextComponent textRateT
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Wie unangenehm fanden Sie den elektrischen Reiz?
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    TextComponent text_noPainT
      letterHeight = 0.03
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
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      text:
        nichts
        gespürt
    TextComponent text_slightPainT
      letterHeight = 0.03
      pos = (-0.1, 0.1)
      startVal [time (s)] = 0.0
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      text:
        eben
        wahrnehmbarer
        Schmerz
    TextComponent text_highPainT
      letterHeight = 0.03
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
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      text:
        unerträglicher
        Schmerz
    SliderComponent sliderPainT
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.02
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent keys_PainT
      allowedKeys = 's', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent codePainRatingT
      Code Type = Py
      Begin Experiment:
        skipShock = False
      Begin Routine:
        logging.log(level=logging.INFO, msg=f'PainThreshold')
        print("Press 's' to administer shock. Press 'g' to continue when pain threshold was found.")
      Each Frame:
        if 'g' in keys_PainT.keys:
            continueRoutine = False
            trials_threshold.finished = True
            skipShock = True
  Routine shock
    CodeComponent code
      Code Type = Py
      Each Frame:
        if skipShock:
            continueRoutine = False
    ParallelOutComponent portShock1T
      address = 0x0378
      register = EIO
      startData = 132
      startVal [time (s)] = 0.1
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent portShock2T
      address = 0x0378
      register = EIO
      startData = 132
      startVal [time (s)] = 0.15
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent portShock3T
      address = 0x0378
      register = EIO
      startData = 132
      startVal [time (s)] = 0.2
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent fixcrossT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine testInstr
    TextComponent textTestInstr
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Im nächsten Block sehen Sie noch einmal die unterschiedlichen Bilder.

        Bitte drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceTestInstr
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeTestInstruction
      Code Type = Py
      Begin Routine:
        print("Start Test Phase. Press Space to continue.")
  Routine startExp
    TextComponent textStartExp
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Die Kalibrierung ist nun abgeschlossen und wir starten nun mit dem Experiment.

        Sie werden nun in einer der vier Ecken des Bildschirms ein Bild präsentiert bekommen. Unter manchen Umständen werden Sie eine Belohnung oder jedoch einen elektrischen Reiz erhalten.
        Versuchen Sie Ihren Belohnungsscore zu maximieren.

        Bitte fixieren Sie am Anfang immer das Fixationskreuz.

        Drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spaceStartExp
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeStartExperiment
      Code Type = Py
      Begin Routine:
        print("Start Experiment Screen. Press Space to continue.")
  Routine startPainThreshold
    TextComponent textPainThreshold
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Wir möchten zuerst den elektrischen Reiz richtig einstellen.

        Bitte drücken Sie die Leertaste, um zu starten.
    KeyboardComponent spacePainThreshold
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeStartPainThreshold
      Code Type = Py
      Begin Routine:
        print("Pain Calibration Screen. Press Space to continue.")
  Routine startETCalibration
    TextComponent text_ETCalibration
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Wir machen nun mit der Kalibrierung des Eye-Trackers weiter.

        Bitte drücken Sie wieder die Leertaste, um diese zu starten.
    KeyboardComponent spaceETCalibration
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeStartETCalibration
      Code Type = Py
      Begin Routine:
        print("ET Calibration Screen. Press Space to continue.")
  Routine crossEnd
    CodeComponent code_end
      Code Type = Py
      Begin Routine:
        eyetracker.setRecordingState(False)
    TextComponent fixcrossE
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] =  3 + random()
      text = +
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  EyetrackerValidationRoutine ETValidation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = white
    expandDur = 1
    expandScale = 1
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 0.7
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = False
    targetDelay = 1.0
    targetDur = 1
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  EyetrackerCalibrationRoutine ETCalibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 0.7
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  Routine welcome
  Routine startPainThreshold
  LoopInitiator trials_threshold loopType="TrialHandler"
    loopType = random
    nReps = 99999
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    Routine painThreshold
    Routine shock
  LoopTerminator trials_threshold
  Routine startETCalibration
  EyetrackerCalibrationRoutine ETCalibration
  EyetrackerValidationRoutine ETValidation
  Routine startExp
  Routine blank
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $"chooseBlock"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $posFile
      loopType = random
      nReps = 5
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      Routine cross
      Routine blank
      Routine trial
      Routine feedback
      Routine crossEnd
    LoopTerminator trials
    Routine painRating
    LoopInitiator ratingstrials loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 1
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      Routine stimRating
    LoopTerminator ratingstrials
    Routine testInstr
    LoopInitiator testtrials loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 10
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      Routine cross
      Routine testtrial
      Routine crossEnd
    LoopTerminator testtrials
    LoopInitiator ratingstrials2 loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 1
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      Routine stimRating
    LoopTerminator ratingstrials2
  LoopTerminator blocks
  Routine end
