PsychoPy2experiment version="2023.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': "['A', 'B', 'C', 'D']"}
  Full-screen window = True
  Monitor = officeMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2194, 1234]
  expName = gca
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine trial
    CodeComponent code_trial
      Code Type = Py
      Before Experiment:
        feedback_color = "grey"
        feedback_opacity = 0
        feedback_audio = "audio/silence.wav"
        cursorcolor="white"
        digitimer_msg = 0
        biopac_feedback_msg = 0

        rectsize = (0.2, 0.2)
        imagesize_test = [0.2, 0.2]
        imagesize_rating = [0.2, 0.2]

        score = 0
        points = 0
      Begin Routine:
        looked_at = False
        cursorcolor="white"
      Each Frame:
        if roi.isLookedIn:
            looked_at = True
            continueRoutine = False
      End Routine:
        if looked_at & ("plus" in trialtype):
            feedback_color = "red"
            feedback_opacity = 1
            cursorcolor="red"
            feedback_audio = "audio/error.wav"
            digitimer_msg = 128
            biopac_feedback_msg = 2  # Error
            points = 0
            feedback_points = ""
            feedback_score = ""
        elif looked_at & ("minus" in trialtype):
            feedback_color = "green"
            feedback_opacity = 1
            cursorcolor="green"
            feedback_audio = "audio/win.wav"
            digitimer_msg = 0
            biopac_feedback_msg = 3  # Reward
            points = 5
            score += points
            feedback_points = f"+ {points}"
            feedback_score = f"Score: {score}"
        else:
            feedback_color = "grey"
            feedback_opacity = 0
            feedback_audio = "audio/silence.wav"
            digitimer_msg = 0
            biopac_feedback_msg = 4  # None
            points = 0
            feedback_points = ""
            feedback_score = ""

        rectsize = [item * 1.05 for item in image.size]

        image_w = image.size[0]
        image_h = image.size[1]
        image_h_spec_rating = 0.3
        imagesize_rating = [image_w * image_h_spec_rating / image_h, image_h_spec_rating]

        image_h_spec_test = 0.5
        imagesize_test = [image_w * image_h_spec_test / image_h, image_h_spec_test]
    ImageComponent image
      image [set every repeat] = $eval(trialtype)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every frame] = position
      save = every look
      shape = rectangle
      size = image.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    PolygonComponent gazeCursor
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 1
      pos [set every frame] = eyetracker.getPos()
      shape = star
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ParallelOutComponent Biopac_ImageOnset
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine feedback
    TextComponent textPoints
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every frame] = $feedback_points
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    TextComponent textScore
      letterHeight = 0.06
      pos = (0, 0.24)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every frame] = $feedback_score
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    PolygonComponent polygon
      fillColor [set every repeat] = $feedback_color
      lineColor = $feedback_color
      opacity [set every repeat] = feedback_opacity
      pos [set every repeat] = position
      shape = rectangle
      size [set every frame] = rectsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imageFeedback
      image [set every repeat] = $eval(trialtype)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent gazeCursor_Feedback
      fillColor [set every frame] = $cursorcolor
      lineColor = None
      opacity [set every frame] = 0
      pos [set every frame] = eyetracker.getPos()
      shape = star
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    SoundComponent soundFeedback
      sound [set every repeat] = $feedback_audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ParallelOutComponent Digitimer_Shock1
      address = 0x0378
      register = EIO
      startData = digitimer_msg
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent Digitimer_Shock2
      address = 0x0378
      register = EIO
      startData = digitimer_msg
      startVal [time (s)] = 0.05
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent Digitimer_Shock3
      address = 0x0378
      register = EIO
      startData = digitimer_msg
      startVal [time (s)] = 0.1
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent Biopac_Feedback
      address = 0x0378
      register = EIO
      startData = biopac_feedback_msg
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine cross
    PolygonComponent fixateStart
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4 + random()
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  Routine blank
    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0 + random()
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  Routine welcome
    TextComponent welcome_msg
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        vielen Dank für Ihre Teilnahme an unserem Experiment.

        Bitte drücken Sie die Leertaste um zu starten.
    KeyboardComponent space_resp
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = white
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine stopRecord
    PolygonComponent fixateEnd
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    EyetrackerRecordComponent stopRecording
      actionType = Stop Only
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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  Routine startRecord
    EyetrackerRecordComponent startRecording
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine end
    TextComponent end_msg
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        vielen Dank für Ihre Teilnahme an unserem Experiment.

        Das Experiment ist beendet.
        Sie können der Versuchsleitung Bescheid sagen.
  Routine painRating
    TextComponent textRate
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Wie unangenehm finden Sie den präsentierten Reiz?
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    TextComponent text_noPain
      letterHeight = 0.03
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
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      text:
        kein
        Schmerz
    TextComponent text_highPain
      letterHeight = 0.03
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
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      text:
        sehr starker
        Schmerz
    SliderComponent sliderPain
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.02
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ParallelOutComponent PainRating_Shock1
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 2
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent PainRating_Shock2
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 2.05
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent PainRating_Shock3
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 2.1
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent textSpacePain
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Bitte drücken Sie die Leertaste, um die Antwort zu bestätigen.
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    KeyboardComponent spacePain
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [condition] = sliderPain.rating
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  Routine stimRating
    TextComponent textRateStim
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Wie wohl fühlen Sie sich bei der Betrachtung des Bildes?
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    ImageComponent imageRating
      image [set every repeat] = $eval(stimtype)
      pos [set every repeat] = (0, 0.1)
      size [set every frame] = imagesize_rating
      startVal [time (s)] = 0
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    TextComponent text_unpleasant
      letterHeight = 0.03
      pos = (-0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        sehr
        unwohl
    TextComponent text_pleasant
      letterHeight = 0.03
      pos = (0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        sehr
        wohl
    SliderComponent sliderStim
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent textSpaceStim
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Bitte drücken Sie die Leertaste, um die Antwort zu bestätigen.
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    KeyboardComponent spaceStim
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [condition] = sliderStim.rating
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  Routine testtrial
    ImageComponent imageTest
      image [set every repeat] = $eval(stimtype)
      pos [set every repeat] = (0, 0)
      size [set every frame] = imagesize_test
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    ParallelOutComponent Biopac_TestImageOnset
      address = 0x0378
      register = EIO
      startData = 5
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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Flow
  Routine welcome
  Routine painRating
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine startRecord
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $"chooseBlock"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $random(4)*16
      conditionsFile = $posFile
      loopType = random
      nReps = 1
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      Routine cross
      Routine blank
      Routine trial
      Routine feedback
    LoopTerminator trials
    LoopInitiator ratingstrials loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 1
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      Routine stimRating
    LoopTerminator ratingstrials
    LoopInitiator testtrials loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 2
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      Routine cross
      Routine testtrial
    LoopTerminator testtrials
    LoopInitiator ratingstrials2 loopType="TrialHandler"
      conditionsFile = $stimFile
      loopType = random
      nReps = 1
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      Routine stimRating
    LoopTerminator ratingstrials2
  LoopTerminator blocks
  Routine end
